PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = 3words_3trials
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Routines
  Routine trialStilumus
    CodeComponent codeTigger
      Code Type = Auto->JS
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      Begin Routine:
        #make a variable for each to be called from components
        Variable_Item = WordItem[current_trial]
        Variable_Index = WordIndex[current_trial]
        Variable_Group = WordGroup[current_trial]


        #Send the triger signals (Item name, Index, and group)
        #Send Index
        outlet.push_sample(x=[int(Variable_Index)])

        #send the word item
        #outlet.push_sample(x=[Variable_Item])

        if current_trial == num_items -1:
            print(current_trial)
            current_trial = 0
            #randomizes the order of the word array
            random.shuffle(word)

            #make each array
            WordItem = []
            WordIndex = []
            WordGroup = []

            #assigning the word item, index, and group
            for i in range(num_items):
                WordItem.append(word[i][0])
                WordIndex.append(word[i][1])
                WordGroup.append(word[i][2])
        else:
            #increase the counter
            print(current_trial)
            current_trial = current_trial + 1
    TextComponent textWordStimulus
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text [set every repeat]:
        $Variable_Item
    TextComponent textWordAfterCue
      letterHeight = 0.2
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $'((>' + Variable_Item + '<))'
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  Routine WelcomeScreen
    TextComponent textWelcome
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating this time!

        Please press the space key when you are ready.
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fixation
    TextComponent textFixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Cue
    TextComponent textCue
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = <)))
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  Routine initCode
    CodeComponent codeInit
      Code Type = Auto->JS
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      Each Frame:
        #This is for animation
      End Routine:
        #When you leave the section
  Routine trialCode
    CodeComponent codeTrial
      Code Type = Auto->JS
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      Before Experiment:
        import random, xlrd

        #randamize the seed
        random.seed()

        #stimulus file
        infile = 'Simple_Word.xlsx'

        #total num of  items
        num_items= 25
      Begin Experiment:
        #access the xls the stimulus file
        inbook = xlrd.open_workbook(infile)
        #Need to define "Sheet" in excel (machine counts 0  as 1)
        insheet = inbook.sheet_by_index(0)

        #arrays for our stimuli
        word = []

        #read the stimuli from our sheet
        for rowx in range(num_items):

            #read in the values of all columns on this row
            row = insheet.row_values(rowx)

            #saving the word to the word array
            word.append(row)

        #randomizes the order of the word array
        random.shuffle(word)

        #make each array
        WordItem = []
        WordIndex = []
        WordGroup = []

        #assigning the word item, index, and group
        for i in range(num_items):
            WordItem.append(word[i][0])
            WordIndex.append(word[i][1])
            WordGroup.append(word[i][2])

        current_trial = 0
      Begin Routine:
        #make a variable for each to be called from components
        Variable_Item = WordItem[current_trial]
        Variable_Index = WordIndex[current_trial]
        Variable_Group = WordGroup[current_trial]

        current_trial = current_trial + 1
  Routine trialStimulus2
    TextComponent textWordStimulus2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Variable_Index
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  Routine trialStimulus3
    TextComponent textWordStimulus3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Variable_Group
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  Routine initVariables
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        #initiates each array
        WordItem = []
        WordIndex = []
        WordGroup = []

        current_trial = 0
  Routine Trialnit
    CodeComponent code_init
      Code Type = Auto->JS
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      Begin Experiment:
        #1. Import the stimulus file
        #2. Set up for LSL

        import random, xlrd
        from pylsl import StreamInfo, StreamOutlet

        #randamize the seed
        random.seed()
        #stimulus file
        infile = 'Simple_Word.xlsx'
        #total num of  items
        num_items= 25


        #Setup for LSL
        info = StreamInfo(name='WordStimulus', type='Markers', channel_count=1,
                          channel_format='int32', source_id='uniqueid12345')
        # Initialize the stream.
        outlet = StreamOutlet(info)


        # ###########
        #1. make the access to the xlsx file
        #2. make a file by appending each values from xlsx

        #3. make each array including each field (item, index, group)

        #access the xls the stimulus file
        inbook = xlrd.open_workbook(infile)
        #Need to define "Sheet" in excel (machine counts 0  as 1)
        insheet = inbook.sheet_by_index(0)

        #arrays for our stimuli
        word = []

        #initialize the counter
        #rowx = 0
        #read the stimuli from our sheet
        for rowx in range(num_items):

            #read in the values of all columns on this row
            row = insheet.row_values(rowx)

            #saving the word to the word array
            word.append(row)

         # USED TO BE HERE
        #randomizes the order of the word array
        random.shuffle(word)

        #make each array
        WordItem = []
        WordIndex = []
        WordGroup = []

        #assigning the word item, index, and group
        for i in range(num_items):
            WordItem.append(word[i][0])
            WordIndex.append(word[i][1])
            WordGroup.append(word[i][2])

        current_trial = 0
  Routine InitVar
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        #print(current_trial)

        # initialize
        #current_trial = 0


        #print(current_trial)
  Routine Blank5000
    TextComponent textBlank5000
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Blank500
    TextComponent textBlank500
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine EndScreen
    TextComponent BlockEndtext
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        This section is done!

        Please tell the researcher.
  Routine BlockEndScreen
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        This block is done!

        Ready for the next one?
Flow
  Routine Trialnit
  Routine WelcomeScreen
  Routine Blank5000
  LoopInitiator Blocks loopType="TrialHandler"
    loopType = random
    nReps = 10
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    LoopInitiator trialsFirst loopType="TrialHandler"
      loopType = random
      nReps = num_items
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      Routine Fixation
      Routine trialStilumus
    LoopTerminator trialsFirst
  LoopTerminator Blocks
  Routine EndScreen
